PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'gender': '', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  expName = Roughness.
  keyboardBackend = ioHub
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Routines
  Routine feedback
    CodeComponent checkCorrect
      Code Type = Auto->JS
      Begin Routine:
        if resp.corr == 1:
            msg = "Correct! Well done!"
        else:
            msg = "Too bad! Wrong that time!"
    TextComponent feedBackText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine thanks
    TextComponent thanksText
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You're done! You've reached the end of the firsr part!

        Press any key to continue.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent instrText
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You will be presented with two tones and will have to respond to simple questions using a slider. Please pay attention to both tones, as you will need to compare them to each other. The questions will either be about how similar the two tones are in their pitch, tremolo or roughness.

        Some example sounds will also be played to introduce what is meant by tremolo, roughness and pitch.

        Press any key to proceed.
    KeyboardComponent instrEnd
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    TextComponent stimulus
      letterHeight = 0.07
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = +++
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy import sound, core
        import numpy as np

        time = np.linspace(0, 1, 48000)
        carrier_tone = np.sin(2*np.pi*carrier*time)

        # amp = (np.cos(2*np.pi*am*time) / 2) + 1
        amp = np.sin(2*np.pi*am*time)
        tone = carrier_tone * (1 + mod * amp)

        tone = np.vstack([tone, tone]).T
        wave = sound.Sound(0.99*tone, sampleRate=48000)
        wave.play()
    TextComponent text_10
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      wrapWidth = 0.65
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      text [set every repeat]:
        $question
  Routine Fixation1
    TextComponent fix
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = + 
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    TextComponent text_11
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.6
      wrapWidth = 0.65
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      text [set every repeat]:
        $question
  Routine end_block
    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You've reached the end of the block.

        You can take a short break.

        Press any key when you're ready to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_block
    TextComponent text_3
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        If you would like to take a break please do so now.

        When you are ready press any key to start.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_tremolo
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Did the second sound have more or less tremolo than the first?
    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_pitch
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Did the second and first sound have the same pitch?
    KeyboardComponent key_resp_5
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response
    TextComponent text
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      wrapWidth = 0.65
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      text [set every repeat]:
        hello
    SliderComponent slider
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      granularity = 0
      initVal = 0
      letterHeight = 0.07
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1,100)
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  Routine instructions2
    TextComponent text_13
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You will be presented with two tones and will have to make judgements about how similar they are using a slider. Please pay attention to both tones, as you will need to compare them to each other.

        Press any key to proceed.
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine questions
    TextComponent text_8
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        There will be 3 blocks of trials, the duration of each will be approximately 10 minutes.

        If you have any questions about the experiment please ask now, as you will not be able to do so once the experiment has begun.

        If not press any key to continue.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine example_sounds
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy.event import Mouse
        import numpy as np
        from psychopy import sound, core, visual
        from scipy import signal
        myClock = core.Clock()

        if ('block' in locals()) and (block.thisN == 2):
            continueRoutine = False

        text_7.text = 'Loading...'

        def play_tone(tone):
            tone = np.vstack([tone, tone]).T
            wave = sound.Sound(0.99*tone, sampleRate=48000)
            wave.play()
            myClock.reset()

        sample_rate = 48000
        seconds = 3
        time = np.linspace(0, seconds, seconds*sample_rate)
        pad = int(0.1*sample_rate)
        full_time = np.linspace(0, seconds+0.2, int((seconds+0.2)*sample_rate))
        pad_time = np.linspace(0, 0.2, int(0.2*sample_rate))

        carrier = 1000
        am_tremo = 10
        am_rough = 70

        # Create signals
        f0 = carrier-500
        f1 = carrier+500

        pitch = signal.chirp(time, f0, 3, f1)
        start = np.cos(2*np.pi*f0*pad_time)
        stop = np.cos(2*np.pi*f1*pad_time)
        pitch = np.hstack((start, pitch, stop))

        am = np.linspace(0, 0.5, len(time))
        am = am * (np.cos(2*np.pi*am_rough*time) + 1)
        am = np.hstack((np.zeros((pad,)), am, np.ones((pad,))))
        am = 1 - am
        rough = am * np.sin(2*np.pi*carrier*full_time)

        am = np.linspace(0, 0.5, len(time))
        am = am * (np.cos(2*np.pi*am_tremo*time) + 1)
        am = np.hstack((np.zeros((pad,)), am, np.ones((pad,))))
        am = 1 - am

        tremolo = am * np.sin(2*np.pi*carrier*full_time)

        # Can change these to all False to speed up testing
        #tones_played = [False, False, False, False, False, False]
        tones_played = [True, True, True, True, True, True]
      Each Frame:
        if myClock.getTime() > 4:
            text_7.text = ''
            if np.all(tones_played):
                text_9.text = 'Press space to continue'

            keys = ExampleKeys.getKeys()
            keys = [k.name for k in keys]
            if '1' in keys:
                play_tone(pitch)
                text_7.text = 'playing...'
                tones_played[0] = True
            elif '2' in keys:
                play_tone(np.flipud(pitch))
                text_7.text = 'playing...'
                tones_played[1] = True
            elif '5' in keys:
                play_tone(rough)
                text_7.text = 'playing...'
                tones_played[2] = True
            elif '6' in keys:
                play_tone(np.flipud(rough))
                text_7.text = 'playing...'
                tones_played[3] = True
            elif '9' in keys:
                play_tone(tremolo)
                text_7.text = 'playing...'
                tones_played[4] = True
            elif '0' in keys:
                play_tone(np.flipud(tremolo))
                text_7.text = 'playing...'
                tones_played[5] = True
            elif 'space' in keys and np.all(tones_played):
                print('ends')
                continueRoutine = False
            elif 'esc' in keys:
                core.quit()
    KeyboardComponent ExampleKeys
      allowedKeys = 1, 2, 5, 6, 9, 0, 'esc', 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_6
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Example Sounds:
        Press the number buttons to hear:

        1 - increasing pitch
        2 - decreasing pitch

        5 - increasing roughness
        6 - decreasing roughness


        9 - increasing tremolo
        0 - decreasing tremolo

        Please listen to each of the sounds until you know what is meant by each sensation.
    TextComponent text_7
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Play each sound at least once.
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  Routine ready_go
    TextComponent text_countdown
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $str(3-int(t))
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  Routine information
  Routine start
    TextComponent text_12
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = When you are ready, press any key to start the experiment. 
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions2_2
  Routine questions2
    TextComponent text_14
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        There will be 1 block of trials, the duration of which will be approximately 15 minutes.

        If you have any questions about the experiment please ask now, as you will not be able to do so once the experiment has begun.

        If not press any key to continue.
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation2
    TextComponent text_15
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial2
    TextComponent text_16
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = +++
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    TextComponent text_17
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = How different are the two sounds? 
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    SoundComponent sound_1
      sound [set every repeat] = $instrument1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_2
      sound [set every repeat] = $instrument2
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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  Routine response2
    TextComponent text_18
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = How different are the two sounds? 
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    SliderComponent slider_2
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      granularity = 0
      initVal = 0
      labels = ('The same' 'Completely different')
      letterHeight = 0.07
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 100)
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  Routine end
    TextComponent text_19
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = You're done! Thank you for taking part. 
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  Routine slider_response
    TextComponent text_20
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
      wrapWidth = 0.65
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    SliderComponent slider_3
      forceEndRoutine = True
      granularity = 0
      labels = ('The Same', 'Completely Different')
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1,100)
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Flow
  Routine instructions
  Routine questions
  Routine example_sounds
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine ready_go
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'carrier': 440, 'am': 5, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 440, 'am': 10, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 440, 'am': 20, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 440, 'am': 40, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 440, 'am': 80, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 440, 'am': 160, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 440, 'am': 320, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 1000, 'am': 5, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 1000, 'am': 10, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 1000, 'am': 20, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 1000, 'am': 40, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 1000, 'am': 80, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 1000, 'am': 160, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 1000, 'am': 320, 'question': 'Was the second sound more or less rough than than the first?'}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
      Routine Fixation1
      LoopInitiator pair loopType="TrialHandler"
        conditionsFile = modulation.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'mod': 0.2},
          {'mod': 1}]
        Routine Trial
      LoopTerminator pair
      Routine slider_response
    LoopTerminator trials
    Routine end_block
  LoopTerminator block
  Routine thanks
  Routine instructions2
  Routine questions2
  Routine ready_go
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = instruments.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'instrument1': 'C:\\Users\\axt275\\Downloads\\banjo_C4_very-long_forte_normal.wav', 'instrument2': 'C:\\Users\\axt275\\Downloads\\bass-clarinet_C4_1_fortissimo_normal.wav'},
      {'instrument1': 'C:\\Users\\axt275\\Downloads\\banjo_C4_very-long_forte_normal.wav', 'instrument2': 'C:\\Users\\axt275\\Downloads\\cello_C4_1_fortissimo_arco-normal.wav'},
      {'instrument1': 'C:\\Users\\axt275\\Downloads\\banjo_C4_very-long_forte_normal.wav', 'instrument2': 'C:\\Users\\axt275\\Downloads\\clarinet_C4_1_fortissimo_normal.wav'},
      {'instrument1': 'C:\\Users\\axt275\\Downloads\\banjo_C4_very-long_forte_normal.wav', 'instrument2': 'C:\\Users\\axt275\\Downloads\\guitar_C4_very-long_forte_normal.wav'},
      {'instrument1': 'C:\\Users\\axt275\\Downloads\\banjo_C4_very-long_forte_normal.wav', 'instrument2': 'C:\\Users\\axt275\\Downloads\\flute_C4_1_forte_normal.wav'},
      {'instrument1': 'C:\\Users\\axt275\\Downloads\\banjo_C4_very-long_forte_normal.wav', 'instrument2': 'C:\\Users\\axt275\\Downloads\\oboe_C4_1_fortissimo_normal.wav'},
      {'instrument1': 'C:\\Users\\axt275\\Downloads\\banjo_C4_very-long_forte_normal.wav', 'instrument2': 'C:\\Users\\axt275\\Downloads\\french-horn_C4_very-long_forte_normal.wav'},
      {'instrument1': 'C:\\Users\\axt275\\Downloads\\banjo_C4_very-long_forte_normal.wav', 'instrument2': 'C:\\Users\\axt275\\Downloads\\trumpet_C4_1_fortissimo_normal.wav'}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
    Routine fixation2
    Routine trial2
    Routine response2
  LoopTerminator trials_2
  Routine end
